Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\Device File - 1.dev
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      Device to use: Agilent Bravo - 1
      1: 96 Costar 3961 PP 2ml assay block
      2: 384 ABI PCR 4309849 in SILVER Insert
      3: 96 Costar 3961 PP 2ml assay block
      4: 96 Costar 3961 PP 2ml assay block
      8: 96 ABI PCR half skirt in Red Alum Insert
      9: 96 V11 LT250 Tip Box Filtered
Main_Processes
  Process
    Plate name: RNA Extraction
    Plate type: 96 Nunc Deep Well 1.2 mL
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    Task BuiltIn::Place Plate
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: RNA Capture
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    Task BuiltIn::Place Plate
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: RNA Wash 1
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    Task BuiltIn::Place Plate
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task BuiltIn::User Message
      Estimated time: 45
      Title: Place wash 2
      Pause process: 1
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    Task Bravo::SubProcess
      Sub-process name: RNA Wash 2
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    Task BuiltIn::Place Plate
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task BuiltIn::User Message
      Estimated time: 17
      Title: Place Ethanol
      Pause process: 1
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash
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    Task BuiltIn::Place Plate
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
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    Task BuiltIn::Place Plate
      Device to use: Agilent Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: Aliquot
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    Task BuiltIn::Spawn Process
      Process to spawn: Stamp
  Process
    Plate name: Stamp
    Plate type: 96 ABI PCR half skirt in Red Alum Insert
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    Task BuiltIn::Place Plate
      Device to use: Agilent Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Bravo SubProcess
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  Pipette_Process Name=Aliquot
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Reserve Location
      Location to use, plate: RNA Extraction
      Location to use, location: 6
      Reservation time: 300
    Task BuiltIn::User Message
      Estimated time: 55
      Title: Place Elution Buffer at station 8
      Pause process: 1
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 1
      Location: 6
      Turn off temperature: 1
      Temperature: 50
      Wait: 0
      Timeout: 1
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    Task BuiltIn::Reserve Location
      Location to use, plate: RNA Extraction
      Location to use, location: 5
      Reservation time: 0
    Task BuiltIn::User Message
      Estimated time: 1
      Title: Place new tips at position 9.
      Body: Place new tips at position 9.
      Pause process: 1
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    Task Bravo::secondary::Tips On
      Estimated time: 8
      Location, plate: 9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: 8
      Volume: 100
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 3
      Location, plate: 8
      Volume: 100
      Distance from well bottom: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 11
      Location, plate: 8
      Volume: 35
      Pre-aspirate volume: 10
      Liquid class: elution volume
      Distance from well bottom: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: RNA Extraction
      Volume: 35
      Liquid class: elution volume
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: RNA Extraction
      Mode: Timed
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 300
      Allow concurrent operation: 1
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 193
      Location, plate: RNA Extraction
      Volume: 20
      Liquid class: Bead Mixing
      Mix cycles: 100
      Dynamic tip extension: .02
      Aspirate distance: .5
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: RNA Extraction
      Location to use, location: 7
      Reservation time: 60
    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: RNA Extraction
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 3
      Location: 3
    Task BuiltIn::User Message
      Estimated time: 130
      Title: PLACE PLATES
      Body:
        1) RNA storage plate at position 8.

        2) Illumina sequencing plate at position 5.

        3) qPCR plate at position 2.
      Pause process: 1
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    Task BuiltIn::User Message
      Estimated time: 148
      Title: CONTROLS
      Body:
        Add illumina controls:

        Negative in C12.
        Positive in D12.
      Pause process: 1
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    Task Bravo::secondary::Aspirate
      Estimated time: 48
      Location, plate: RNA Extraction
      Volume: 35
      Liquid class: elution to qPCR aspirate
      Distance from well bottom: 0.2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: 8
      Volume: 35
      Liquid class: elution to qPRC dispense
      Distance from well bottom: 4
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Tip touch retract distance: 5
      Tip touch horizontal offset: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 9
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=Bravo SubProcess
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: 9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 6
      Location, plate: 8
      Volume: 15
      Liquid class: elution to qPCR aspirate
      Distance from well bottom: 1
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Tip touch retract distance: 5
      Tip touch horizontal offset: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::User Message
      Estimated time: 6
      Title: TIP INSPECTION!
      Pause process: 1
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      Location, plate: Stamp
      Volume: 8.5
      Liquid class: elution to qPRC dispense
      Distance from well bottom: 0.5
      Perform tip touch: 1
      Which sides to use for tip touch: West
      Tip touch retract distance: 5
      Tip touch horizontal offset: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::User Message
      Estimated time: 5
      Title: TIP INSPECTION!
      Pause process: 1
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: 2
      Volume: 5
      Liquid class: elution to qPRC dispense
      Distance from well bottom: 4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: 1
      Empty tips: 1
      Volume: 30
      Liquid class: elution to qPRC dispense
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East/South/North
      Tip touch horizontal offset: 0.8
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: 9
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=Ethanol Wash
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: 9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 3
      Volume: 0
      Pre-aspirate volume: 30
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: 3
      Volume: 125
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: RNA Extraction
      Volume: 125
      Blowout volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .5
      Dynamic tip retraction: .02
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: RNA Extraction
      Mode: Timed
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 30
      Allow concurrent operation: 1
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 41
      Location, plate: RNA Extraction
      Volume: 160
      Liquid class: Bead Mixing
      Mix cycles: 10
      Dynamic tip extension: .02
      Aspirate distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: RNA Extraction
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: RNA Extraction
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: RNA Extraction
      Volume: 150
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: 1
      Volume: 150
      Blowout volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East/South/North
      Tip touch horizontal offset: -.8
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: 9
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=Ethanol Wash 2
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: 9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 3
      Volume: 0
      Pre-aspirate volume: 30
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: 3
      Volume: 125
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: RNA Extraction
      Volume: 125
      Blowout volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .5
      Dynamic tip retraction: .02
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: RNA Extraction
      Mode: Timed
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 30
      Allow concurrent operation: 1
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      Location: 6
      Temperature: 55
      Wait: 0
      Timeout: 1
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 41
      Location, plate: RNA Extraction
      Volume: 160
      Liquid class: Bead Mixing
      Mix cycles: 10
      Dynamic tip extension: 0.02
      Aspirate distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: RNA Extraction
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: RNA Extraction
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: RNA Extraction
      Volume: 150
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: 1
      Volume: 150
      Blowout volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East/South/North
      Tip touch horizontal offset: -.8
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: 9
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=RNA Capture
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: 9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      Location, plate: 4
      Volume: 0
      Pre-aspirate volume: 30
      Distance from well bottom: 100
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: 4
      Volume: 105
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: 8
      Volume: 105
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Dynamic tip retraction: .02
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 42
      Location, plate: 8
      Location, location: 8
      Volume: 70
      Liquid class: Bead Mixing
      Mix cycles: 15
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 8
      Location, location: 8
      Volume: 119
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: RNA Extraction
      Location, location: 5
      Volume: 119
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 41
      Location, plate: RNA Extraction
      Volume: 150
      Pre-aspirate volume: 10
      Blowout volume: 10
      Liquid class: Bead Mixing
      Mix cycles: 10
      Dynamic tip extension: 0.02
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: RNA Extraction
      Mode: Timed
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 600
      Allow concurrent operation: 1
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 388
      Location, plate: RNA Extraction
      Volume: 160
      Liquid class: Bead Mixing
      Mix cycles: 100
      Dynamic tip extension: .02
      Aspirate distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: RNA Extraction
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: RNA Extraction
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 4
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: RNA Extraction
      Volume: 150
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: 1
      Volume: 150
      Blowout volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East/South/North
      Tip touch horizontal offset: -.8
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: 9
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=RNA Wash 1
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: 9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 3
      Volume: 0
      Pre-aspirate volume: 30
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: 3
      Volume: 125
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: RNA Extraction
      Volume: 125
      Blowout volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .5
      Dynamic tip retraction: .02
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: RNA Extraction
      Mode: Timed
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 30
      Allow concurrent operation: 1
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 41
      Location, plate: RNA Extraction
      Volume: 160
      Liquid class: Bead Mixing
      Mix cycles: 10
      Dynamic tip extension: .02
      Aspirate distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: RNA Extraction
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: RNA Extraction
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: RNA Extraction
      Volume: 150
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: 1
      Volume: 150
      Blowout volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East/South/North
      Tip touch horizontal offset: -.8
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: 9
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 3
      Location: 1
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  Pipette_Process Name=RNA Wash 2
    Device Device_Name=Agilent Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: 9
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: 3
      Volume: 0
      Pre-aspirate volume: 30
      Distance from well bottom: 30
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: 3
      Volume: 125
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: RNA Extraction
      Volume: 125
      Blowout volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .5
      Dynamic tip retraction: .02
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: RNA Extraction
      Mode: Timed
      RPM: 500
      Direction: NWSE
      Time for operation in Timed mode: 30
      Allow concurrent operation: 1
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 41
      Location, plate: RNA Extraction
      Volume: 160
      Liquid class: Bead Mixing
      Mix cycles: 10
      Dynamic tip extension: .02
      Aspirate distance: 1.5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: RNA Extraction
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: RNA Extraction
      Location to use, location: 7
      Reservation time: 60
    Task BuiltIn::Loop
      Number of times to loop: 2
      Change tips every N times, N = : 2
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: RNA Extraction
      Volume: 150
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: .2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: 1
      Volume: 150
      Blowout volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East/South/North
      Tip touch horizontal offset: -.8
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      Location, plate: 9
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Move To Location
      Estimated time: 3
      Location: 1
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