<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\Device File - 1.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
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						<Parameter Category='' Name='2' Value='384 ABI PCR 4309849 in SILVER Insert' />
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						<Parameter Category='' Name='8' Value='96 ABI PCR half skirt in Red Alum Insert' />
						<Parameter Category='' Name='9' Value='96 V11 LT250 Tip Box Filtered' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Bravo SubProcess 10' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Bravo SubProcess 10' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='process - 1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Bravo SubProcess 10' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='7' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='10' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='elution to qPCR aspirate' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='.2' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='1.5' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Tip Inspection' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='elution to qPRC dispense' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='4' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='elution to qPRC dispense' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='5' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='1.5' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Agilent Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>