<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='59ff08653efb099dcf4b58a19b21f794' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\Device File - 1.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='' />
					</Devices>
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >0</Task_Disabled>
					<Task_Skipped >0</Task_Skipped>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings />
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Display confirmation' Value='' />
						<Parameter Category='' Name='1' Value='' />
						<Parameter Category='' Name='2' Value='' />
						<Parameter Category='' Name='3' Value='' />
						<Parameter Category='' Name='4' Value='' />
						<Parameter Category='' Name='5' Value='' />
						<Parameter Category='' Name='6' Value='' />
						<Parameter Category='' Name='7' Value='' />
						<Parameter Category='' Name='8' Value='12 SeaHorse PP Reservoir Pyramid Btm' />
						<Parameter Category='' Name='9' Value='96 V11 LT250 Tip Box Filtered' />
						<Parameter Category='Task Description' Name='Task number' Value='1' />
						<Parameter Category='Task Description' Name='Task description' Value='Configure Labware' />
						<Parameter Category='Task Description' Name='Use default task description' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::SubProcess' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >0</Task_Disabled>
					<Task_Skipped >0</Task_Skipped>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings />
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Bravo SubProcess 1' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='2' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='3' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='4' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='5' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='6' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='7' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='8' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Bravo SubProcess 1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='process - 1' />
					<Parameter Name='Plate type' Value='' />
					<Parameter Name='Simultaneous plates' Value='1' />
					<Parameter Name='Plates have lids' Value='0' />
					<Parameter Name='Plates enter the system sealed' Value='0' />
					<Parameter Name='Use single instance of plate' Value='0' />
					<Parameter Name='Automatically update labware' Value='0' />
					<Parameter Name='Enable timed release' Value='0' />
					<Parameter Name='Release time' Value='30' />
					<Parameter Name='Auto managed counterweight' Value='0' />
					<Parameter Name='Barcode filename' Value='No Selection' />
					<Parameter Name='Has header' Value='' />
					<Parameter Name='Barcode or header South' Value='No Selection' />
					<Parameter Name='Barcode or header West' Value='No Selection' />
					<Parameter Name='Barcode or header North' Value='No Selection' />
					<Parameter Name='Barcode or header East' Value='No Selection' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Bravo SubProcess 1' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >0</Task_Disabled>
					<Task_Skipped >0</Task_Skipped>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings >
						<Setting Name='Estimated time' Value='7' />
					</Advanced_Settings>
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;9757f6c2d2ffcd4028d388c9a706d5ea&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Task Description' Name='Task number' Value='1' />
						<Parameter Category='Task Description' Name='Task description' Value='Tips On (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='1' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >0</Task_Disabled>
					<Task_Skipped >0</Task_Skipped>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings >
						<Setting Name='Estimated time' Value='4' />
					</Advanced_Settings>
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Volume' Name='Volume' Value='50' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='30' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='0' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='0' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;01458888263360e63267dae0eeda8291&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
						<Parameter Category='Task Description' Name='Task number' Value='2' />
						<Parameter Category='Task Description' Name='Task description' Value='Aspirate (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='1' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >0</Task_Disabled>
					<Task_Skipped >0</Task_Skipped>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings >
						<Setting Name='Estimated time' Value='2' />
					</Advanced_Settings>
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='0' />
						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='100' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='0' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='0' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;01458888263360e63267dae0eeda8291&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
						<Parameter Category='Task Description' Name='Task number' Value='3' />
						<Parameter Category='Task Description' Name='Task description' Value='Dispense (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='1' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::User Message' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >0</Task_Disabled>
					<Task_Skipped >0</Task_Skipped>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings >
						<Setting Name='Estimated time' Value='25' />
					</Advanced_Settings>
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='TIP INSPECTION!' />
						<Parameter Category='' Name='Body' Value='Are any barrels leaking?' />
						<Parameter Category='' Name='Only show the first time' Value='' />
						<Parameter Category='' Name='Display dialog box' Value='1' />
						<Parameter Category='' Name='Pause process' Value='1' />
						<Parameter Category='' Name='Email' Value='0' />
						<Parameter Category='' Name='Twitter message' Value='0' />
						<Parameter Category='Scripting variable data entry' Name='User data entry into variable' Value='0' />
						<Parameter Category='Scripting variable data entry' Name='Variable name' Value='' />
						<Parameter Category='Task Description' Name='Task number' Value='4' />
						<Parameter Category='Task Description' Name='Task description' Value='User Message' />
						<Parameter Category='Task Description' Name='Use default task description' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >0</Task_Disabled>
					<Task_Skipped >0</Task_Skipped>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings >
						<Setting Name='Estimated time' Value='4' />
					</Advanced_Settings>
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='5' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='0' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='0' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;01458888263360e63267dae0eeda8291&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
						<Parameter Category='Task Description' Name='Task number' Value='5' />
						<Parameter Category='Task Description' Name='Task description' Value='Dispense (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='1' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
					<Enable_Backup >0</Enable_Backup>
					<Task_Disabled >0</Task_Disabled>
					<Task_Skipped >0</Task_Skipped>
					<Has_Breakpoint >0</Has_Breakpoint>
					<Advanced_Settings >
						<Setting Name='Estimated time' Value='5' />
					</Advanced_Settings>
					<TaskScript Name='TaskScript' Value='' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;9757f6c2d2ffcd4028d388c9a706d5ea&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
						<Parameter Category='Task Description' Name='Task number' Value='6' />
						<Parameter Category='Task Description' Name='Task description' Value='Tips Off (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='1' />
					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Devices >
					<Device Device_Name='Agilent Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
					<Parameter Name='Display confirmation' Value='Don&apos;t display' />
					<Parameter Name='1' Value='&lt;use default&gt;' />
					<Parameter Name='2' Value='&lt;use default&gt;' />
					<Parameter Name='3' Value='&lt;use default&gt;' />
					<Parameter Name='4' Value='&lt;use default&gt;' />
					<Parameter Name='5' Value='&lt;use default&gt;' />
					<Parameter Name='6' Value='&lt;use default&gt;' />
					<Parameter Name='7' Value='&lt;use default&gt;' />
					<Parameter Name='8' Value='&lt;use default&gt;' />
					<Parameter Name='9' Value='&lt;use default&gt;' />
				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>